---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 22000
set sound_channels 1
set sound_buf_size 2048
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:\\reincarnation of kallu\\ACADEMICS\\UG 3\\sem 5\\Experimental Psychology\\project\\exp - project"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sequence BART
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run BART_block_prepare always
	run BART_Trials_Loop always
	run Bart_Post_Trials_sequence always

define loop BART_Loop
	set source_file ""
	set source table
	set skip 0
	set repeat 20
	set order random
	set offset no
	set item BART
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run BART

define loop BART_Trials_Loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item BART_Trials_sequence
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[break_bool] = 1"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	run BART_Trials_sequence

define sequence BART_Trials_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Inflate_sequence "[explode] = no"
	run Explode_sequence "[explode] = yes"
	run Rounds_controller "[explode] = no"
	run new_advanced_delay always

define inline_script BART_block_prepare
	set description "Executes Python code"
	___run__
	var.explode = 'no'
	var.rounds = 1
	# var.var_list = ['subject_nr', 'count_BART', 'count_BART_Trials_sequence', 'rounds', 'response_time_Trial_decision', 'response_Trial_decision', 'explode','total_pennies','total_cash','temp_cash','temp_pennies',u'rps_q1',u'rps_q2',u'rps_q3',u'rps_q4',u'rps_q5',u'rps_q6',u'rps_q7',u'answers_post',u'questions_in_post']
	var.break_bool = 0
	var.Probability = 0.0
	temp_pennies = 0.0
	var.temp_cash = "$%.2f" % temp_pennies
	
	var.answers_post = "NANA"
	var.questions_in_post = "NANA"
	__end__
	set _prepare ""

define sequence Bart_Post_Trials_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Sum_total_earnings always
	run Total_earnings always

define sketchpad Begin_BART
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Let's earn some real money now.<br /><br />Don't forget, Spacebar<br /><br />inflates the balloon,<br /><br />while Enter puts your new earnings<br /><br />in the bank and starts a new balloon.<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />Press any button to continue." x=0 y=0 z_index=0

define inline_script Clear_temporary_earnings
	set description "Executes Python code"
	___run__
	var.temp_pennies = 0.0
	var.break_bool = 1
	__end__
	set _prepare ""

define inline_script Decision_made
	set description "Executes Python code"
	___run__
	if var.response_Trial_decision == var.cash_out_button:
		var.explode = 'no'
	__end__
	set _prepare ""

define sketchpad Explode
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="PopRed.jpg" scale="[balloon_size]" show_if=always x=0 y=0 z_index=0

define sequence Explode_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Explode always
	run Explosion_sound always
	run Clear_temporary_earnings always

define sampler Explosion_sound
	set volume 1
	set stop_after 0
	set sample "explosionMax_22k16bMono.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad INTRO
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="First part of the experiment is completed.<br />Press any button to continue." x=0 y=0 z_index=0

define inline_script Imports_and_Defaults
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.balloon_sizes = {}
	
	for i in range(0,20):
		y_val = 300 - (15*i)
		j = "%.2f" % ((20 - i) / 20.0)
		balloon_sizes[j] = y_val
	
	#init
	var.explode = 'no'
	var.rounds = 0
	
	var.temp_pennies = 0
	var.temp_cash = "$%.2f" % temp_pennies
	var.break_bool = 0
	
	# Probability variable for random explosion time
	var.Probability = 0
	
	# Set up sound for successful inflation
	src1 = exp.pool['casino960msMax_22k16bMono.wav']
	Casino_sound = sampler(src1, volume=1)
	
	# Set up sound for cashing out
	src2 = exp.pool['finale_22k16bMono.wav']
	Cash_out_sound = sampler(src2, volume=1)
	
	var.total_pennies = 0.0
	var.total_cash = "$%.2f" % total_pennies
	
	var.prac_pennies = 0.0
	var.prac_cash = "$%.2f" % prac_pennies
	
	var.response_time_Trial_decision = 6969
	
	var.cash_out_button = "return"
	var.inflate_button = "space"
	
	var.response = 0
	
	var.answers_post = "NANA"
	var.questions_in_post = "NANA"
	var.questions_in_pre = "nana"
	__end__

define sketchpad Inflate
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="StemRed.jpg" scale="[balloon_size]" show_if=always x=0 y="[balloon_y]" z_index=1
	draw image center=1 file="BalloonRed.jpg" scale="[balloon_size]" show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press Space:" x=-384 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press Enter:" x=384 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Money this round: [temp_cash]" x=-320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Total money earned: [total_cash]" x=320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Inflate balloon" x=-384 y=352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Cash in money" x=384 y=352 z_index=0

define inline_script Inflate_code_start
	set description "Executes Python code"
	___run__
	# Check if this round is the explosion round
	import random
	
	# Check if this round is the explosion round
	prob_seed = random.random()
	
	if prob_seed < var.Probability:
	    var.explode = 'yes' 
	else: 
	    var.explode = 'no'  # Assign 'yes' or 'no' based on the probability
	
	# Uncomment this line for debugging
	# print(var.explode)
	
	# Increment Probability if explosion did not occur
	if var.explode == 'no':
	    var.Probability += 0.05  # Increase Probability
	    if var.Probability > 1:
	        var.Probability = 1  # Cap it at 1
	        
	        
	__end__
	___prepare__
	balloon_size = "%.2f" % (var.rounds * 0.05)
	
	var.balloon_y = balloon_sizes[str(balloon_size)]
	var.balloon_size = str(balloon_size)
	__end__

define sequence Inflate_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Inflate_code_start always
	run Inflate always
	run Trial_decision always
	run Decision_made always

define loop Outside_Practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Outside_Practice_sequence
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set column_order explode_round
	set break_if_on_first yes
	set break_if never
	setcycle 0 explode_round 2
	setcycle 1 explode_round 15
	run Outside_Practice_sequence

define sequence Outside_Practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Practice_prepare_script always
	run Practice_Loop always
	run Post_Practice always

define sequence Post_Practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Sum_total_earnings_1 always
	run Practice_Total_earnings always

define sketchpad Practice_Inflate
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="StemRed.jpg" scale="[balloon_size]" show_if=always x=0 y="[balloon_y]" z_index=1
	draw image center=1 file="BalloonRed.jpg" scale="[balloon_size]" show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press Spacebar:" x=-384 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press Enter:" x=384 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Money this round: [temp_cash]" x=-320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Total money earned: [prac_cash]" x=320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Inflate balloon" x=-384 y=352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Cash in money" x=384 y=352 z_index=0

define loop Practice_Loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Practice_sequence
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[break_bool] = 1"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	run Practice_sequence

define feedback Practice_Total_earnings
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[prac_cash]" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="in your bank." x=0 y=96 z_index=0

define sketchpad Practice_intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Before we start earning money,<br /><br />let's try a couple practice rounds to get accustomed to the game.<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />Press any button to begin." x=0 y=0 z_index=0

define inline_script Practice_prepare_script
	set description "Executes Python code"
	___run__
	var.explode = u'no'
	var.rounds = 1
	
	temp_pennies = 0.0
	var.temp_cash = "$%.2f" % temp_pennies
	var.break_bool = 0
	__end__
	set _prepare ""

define inline_script Practice_script
	set description "Executes Python code"
	___run__
	if var.explode_round == var.rounds:
		var.explode = u'yes'
	__end__
	___prepare__
	var.balloon_size = "%.2f" % (var.rounds * 0.05)
	
	var.balloon_y = balloon_sizes[str(balloon_size)]
	var.balloon_size = str(balloon_size)
	__end__

define sequence Practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Practice_script always
	run Practice_Inflate always
	run Trial_decision always
	run Decision_made always
	run Explode_sequence "[explode] = yes"
	run new_1_inline_script True
	run new_advanced_delay always

define inline_script RPS_1q
	set description "Executes Python code"
	___run__
	i=0
	
	var.rps_qs = "None"
	
	def my_form_validator():
	    return var.rps_qs != "None"
	
	while i < 6:
	    form = Form(cols=[1,1], validator = my_form_validator, rows=[1,1,1,1,1])
	    title = Label(text=u'Indicate how much you agree with the following statement')
	    
	    ratingScale1 = RatingScale( var='rps_qs', nodes= nodes_6_q)
	
	    nextButton = Button(text=u'Next')
	
	    question1 = Label(text= textQ[i], center=False)
	    
	    var.questions_in_pre = textQ[i]
	    
	    form.set_widget(title, (0, 0), colspan=2)
	    form.set_widget(question1, (0,1), colspan=2)
	    form.set_widget(ratingScale1, (0, 2), colspan=2)
	    form.set_widget(nextButton, (0, 4), colspan=2)
	    i= i+1
	    
	    form._exec()
	    
	    log.write_vars()
	__end__
	___prepare__
	nodes_6_q = [u'Disagree \n\n 1', u'2',u'3', u'4',u'5', u'6',u'7', u'8',u' Agree \n\n 9']
	
	textQ = [
	    "Safety first - totally disagree to totally agree",
	    "I do not take risks with my health - totally disagree to totally agree",
	    "I prefer to avoid risks - totally disagree to totally agree",
	    "I take risks regularly - totally disagree to totally agree",
	    "I really dislike not knowing what is going to happen - totally disagree to totally agree",
	    "I usually view risks as a challenge - totally disagree to totally agree",
	]
	__end__

define inline_script RPS_2
	set description "Executes Python code"
	___run__
	form2 = Form(cols=[1,1], rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale2 = RatingScale(var="rps_q2", nodes=nodes_6_q)
	nextButton = Button(text=u'Next')
	pre_questions = Label(text=u"I do not take risks with my health.", center=False)
	
	form2.set_widget(title, (0, 0), colspan=2)
	form2.set_widget(pre_questions, (0,1))
	form2.set_widget(ratingScale2, (0, 2), colspan=2)
	form2.set_widget(nextButton, (0, 4), colspan=2)
	form2._exec()
	__end__
	set _prepare ""

define inline_script RPS_3
	set description "Executes Python code"
	___run__
	# Question 3
	form3 = Form(cols=[1,1], rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale3 = RatingScale(var="rps_q3", nodes=nodes_6_q)
	nextButton = Button(text=u'Next')
	pre_questions = Label(text=u"I prefer to avoid risks.", center=False)
	
	form3.set_widget(title, (0, 0), colspan=2)
	form3.set_widget(pre_questions, (0,1))
	form3.set_widget(ratingScale3, (0, 2), colspan=2)
	form3.set_widget(nextButton, (0, 4), colspan=2)
	form3._exec()
	__end__
	set _prepare ""

define inline_script RPS_4
	set description "Executes Python code"
	___run__
	# Question 4
	form4 = Form(cols=[1,1], rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale4 = RatingScale(var="rps_q4", nodes=nodes_6_q)
	nextButton = Button(text=u'Next')
	pre_questions = Label(text=u"I take risks regularly.", center=False)
	
	form4.set_widget(title, (0, 0), colspan=2)
	form4.set_widget(pre_questions, (0,1))
	form4.set_widget(ratingScale4, (0, 2), colspan=2)
	form4.set_widget(nextButton, (0, 4), colspan=2)
	form4._exec()
	__end__
	set _prepare ""

define inline_script RPS_last
	set description "Executes Python code"
	___run__
	rps_qs = "None"
	
	def q7_validator():
	    return var.rps_qs != "None"
	    
	form = Form(cols=[1,1], validator = q7_validator, rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	
	ratingScale7 = RatingScale( var=u'rps_qs', nodes=[u'Risk avoider \n\n 1', u'2',u'3', u'4',u'5', u'6',u'7', u'8',u' Risk seeker \n\n 9'])
	                           
	nextButton = Button(text=u'Next')
	
	question1 = Label(text= u'I view myself as a . . .', center=False)
	
	var.i = 7
	
	var.questions_in_pre = 'I view myself as a... Risk Taker/ Seeker'
	    
	form.set_widget(title, (0, 0), colspan=2)
	form.set_widget(question1, (0,1))
	form.set_widget(ratingScale7, (0, 2), colspan=2)
	form.set_widget(nextButton, (0, 4), colspan=2)
	
	form._exec()
	
	log.write_vars()
	__end__
	set _prepare ""

define sketchpad RPSdirection
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Please indicate the extent to which you agree or disagree with the following statement by clicking the option you prefer. <br /><br />Please do not think too long before answering; usually your first inclination is also the best one.<br /><br />Press spacebar to continue." x=0 y=0 z_index=0

define inline_script Rounds_controller
	set description "Executes Python code"
	___run__
	var.rounds += 1
	
	if var.response_Trial_decision == var.cash_out_button:
		Cash_out_sound.play(duration=1000)
		var.break_bool = 1
	elif var.explode == u'no':
		Casino_sound.play()
		temp_pennies += 0.05
	
	var.temp_cash = "$%.2f" % temp_pennies
	
	log.write_vars()
	__end__
	set _prepare ""

define inline_script Sum_total_earnings
	set description "Executes Python code"
	___run__
	var.total_pennies += temp_pennies
	var.total_cash = "$%.2f" % total_pennies
	
	log.write_vars()
	__end__
	set _prepare ""

define inline_script Sum_total_earnings_1
	set description "Executes Python code"
	___run__
	var.prac_pennies += temp_pennies
	var.prac_cash = "$%.2f" % prac_pennies
	__end__
	set _prepare ""

define feedback Total_earnings
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[total_cash]" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="in your bank." x=0 y=96 z_index=0

define keyboard_response Trial_decision
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "return;space"

define sketchpad Welcome_directions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome to the BART experiment.<br /><br /><br /><br />In this game you'll be inflating a balloon by pressing the Spacebar.<br /><br />Everytime you inflate the balloon you'll be given 5 cents.<br /><br />At any point in blowing up balloons you will be able to<br /><br />press the Enter button<br /><br />and your money will be stored in the bank.<br /><br />If you blow the balloon up too much there is a risk of it exploding.<br /><br />If the balloon explodes, then<br /><br />you lose the money you've earned on that balloon.<br /><br /><br /><br />Press any button when ready to continue." x=0 y=0 z_index=0

define sketchpad calculation
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="we are calculating your responses..." x=0 y=0 z_index=0

define sketchpad continue
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="press any button to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Imports_and_Defaults always
	run RPSdirection True
	run RPS_1q True
	run RPS_2 True disabled
	run RPS_3 True disabled
	run RPS_4 True disabled
	run rps_5 True disabled
	run rps_6 True disabled
	run RPS_last True
	run fixation True
	run calculation True
	run new_feedback True
	run Welcome_directions always
	run Practice_intro always
	run Outside_Practice_loop always
	run new_3_sketchpad True
	run new_4_sketchpad True
	run BART_Loop always
	run continue True
	run post_questions True
	run new_2_inline_script True disabled
	run new_3_inline_script True disabled
	run new_4_inline_script True disabled
	run new_5_inline_script True disabled
	run thank_you True

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define inline_script new_1_inline_script
	set description "Executes Python code"
	___run__
	var.rounds += 1
	
	if var.response_Trial_decision == var.cash_out_button:
		Cash_out_sound.play(duration=1000)
		var.break_bool = 1
	elif var.explode == u'no':
		Casino_sound.play()
		temp_pennies += 0.05
	
	var.temp_cash = "$%.2f" % temp_pennies
	__end__
	set _prepare ""

define logger new_1_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome to the BART experiment.<br /><br /><br /><br />In this game you'll be inflating a balloon<br /><br />by pressing the Spacebar.<br /><br />Everytime you inflate the balloon you'll be given 5 cents.<br /><br />At any point in blowing up balloons you will be able to<br /><br />press the Enter button<br /><br />and your money will be stored in the bank.<br /><br />If you blow the balloon up too much there is a risk of it exploding.<br /><br />If the balloon explodes, then<br /><br />you lose the money you've earned on that balloon.<br /><br /><br /><br />Press any button when ready to continue." x=0 y=0 z_index=0

define inline_script new_2_inline_script
	set description "Executes Python code"
	___run__
	form2 = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale2 = RatingScale(var="post_question_2", nodes=[u'Strongly Disagree \n\n 1', u'2', u'3', u'4', u'Strongly Agree \n\n 5'])
	nextButton = Button(text=u'Next')
	question2 = Label(text=u"I believe I have above-average skills in making risk-related decisions.", center=False)
	var.questions_in_post = u"I believe I have above-average skills in making risk-related decisions."
	
	form2.set_widget(title, (0, 0), colspan=2)
	form2.set_widget(question2, (0,1), colspan=2)
	form2.set_widget(ratingScale2, (0, 2), colspan=2)
	form2.set_widget(nextButton, (0, 4), colspan=2)
	form2._exec()
	__end__
	set _prepare ""

define logger new_2_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_2_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Let's earn some real money now.<br /><br />Don't forget, Spacebar<br /><br />inflates the balloon,<br /><br />while Enter puts your new earnings<br /><br />in the bank and starts a new balloon.<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />Press any button to continue." x=0 y=0 z_index=0

define inline_script new_3_inline_script
	set description "Executes Python code"
	___run__
	form3 = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale3 = RatingScale(var="question_3", nodes=[u'Strongly Disagree \n\n 1', u'2', u'3', u'4', u'Strongly Agree \n\n 5'])
	nextButton = Button(text=u'Next')
	question3 = Label(text=u"If I were to attempt the BART task again, I believe I would achieve a higher score.", center=False)
	var.questions_in_post = u"If I were to attempt the BART task again, I believe I would achieve a higher score."
	
	form3.set_widget(title, (0, 0), colspan=2)
	form3.set_widget(question3, (0,1), colspan=2)
	form3.set_widget(ratingScale3, (0, 2), colspan=2)
	form3.set_widget(nextButton, (0, 4), colspan=2)
	form3._exec()
	__end__
	set _prepare ""

define logger new_3_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_3_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Let's earn some real money now.<br /><br />Don't forget, Spacebar inflates the balloon,<br /><br />while Enter puts your new earnings in the bank and starts a new balloon.<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />Press any button to continue." x=0 y=0 z_index=0

define inline_script new_4_inline_script
	set description "Executes Python code"
	___run__
	form4 = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale4 = RatingScale(var="post_question_4", nodes=[u'Strongly Disagree \n\n 1', u'2', u'3', u'4', u'Strongly Agree \n\n 5'])
	nextButton = Button(text=u'Next')
	question4 = Label(text=u"I felt confident in my decision to inflate the balloon during the task.", center=False)
	var.questions_in_post = u"I felt confident in my decision to inflate the balloon during the task."
	
	form4.set_widget(title, (0, 0), colspan=2)
	form4.set_widget(question4, (0,1), colspan=2)
	form4.set_widget(ratingScale4, (0, 2), colspan=2)
	form4.set_widget(nextButton, (0, 4), colspan=2)
	form4._exec()
	__end__
	set _prepare ""

define logger new_4_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_4_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Let's earn some real money now.<br /><br />Don't forget, Spacebar inflates the balloon,<br /><br />while Enter puts your new earnings in the bank and starts a new balloon.<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />Press any button to continue." x=0 y=0 z_index=0

define inline_script new_5_inline_script
	set description "Executes Python code"
	___run__
	form5 = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale5 = RatingScale(var="post_question_5", nodes=[u'Strongly Disagree \n\n 1', u'2', u'3', u'4', u'Strongly Agree \n\n 5'])
	nextButton = Button(text=u'Next')
	question5 = Label(text=u"I feel that I understood the task requirements thoroughly.", center=False)
	var.questions_in_post = u"I feel that I understood the task requirements thoroughly."
	
	form5.set_widget(title, (0, 0), colspan=2)
	form5.set_widget(question5, (0,1), colspan=2)
	form5.set_widget(ratingScale5, (0, 2), colspan=2)
	form5.set_widget(nextButton, (0, 4), colspan=2)
	form5._exec()
	
	log.write_vars()
	__end__
	set _prepare ""

define inline_script new_6_inline_script
	set description "Executes Python code"
	___run__
	# Question 6
	form6 = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale6 = RatingScale(var="question_6", nodes=[u'Strongly Disagree \n\n 1', u'2', u'3', u'4', u'Strongly Agree \n\n 5'])
	nextButton = Button(text=u'Next')
	question6 = Label(text=u"I believe my actual performance matched the feedback I received.", center=False)
	var.questions_in_post = u"I believe my actual performance matched the feedback I received."
	
	form6.set_widget(title, (0, 0), colspan=2)
	form6.set_widget(question6, (0,1), colspan=2)
	form6.set_widget(ratingScale6, (0, 2), colspan=2)
	form6.set_widget(nextButton, (0, 4), colspan=2)
	form6._exec()
	__end__
	set _prepare ""

define inline_script new_7_inline_script
	set description "Executes Python code"
	___run__
	var.i=0
	
	post_textQ = [
	    u"I am confident that I performed well on the BART task.",
	    u"I believe I have above-average skills in making risk-related decisions.",
	    u"If I were to attempt the BART task again, I believe I would achieve a higher score.",
	    u"I felt confident in my decision to inflate the balloon during the task.",
	    u"I feel that I understood the task requirements thoroughly.",
	    u"I believe my actual performance matched the feedback I received.",
	    # u"The feedback I received accurately reflected my ability.",  # (to the control group)
	    # u"I questioned the validity of the feedback given before the task.",
	    # u"Participating in this task has improved my ability to make better decisions under risk.",
	    #u"I believe the feedback influenced my level of confidence during the task."
	    ]
	Question_num = [u'post_Question_1',u'post_Question_2',u'post_Question_3', u'post_Question_4', u'post_Question_5', u'post_Question_6']
	
	while i < 6:
	    form = Form(cols=[1,1], rows=[1,1,1,1,1])
	    title = Label(text=u'Indicate how much you agree with the following statement')
	    
	    ratingScale1 = RatingScale(var=answers_post, nodes=[u'Strongly Disagree \n\n 1', u'2',u'3', u'4',u'Strongly Agree \n\n 5'])
	
	    nextButton = Button(text=u'Next')
	
	    question1 = Label(text= post_textQ[i], center=False)
	    
	    var.questions_in_post = post_textQ[i]
	    
	    form.set_widget(title, (0, 0), colspan=2)
	    form.set_widget(question1, (0,1),colspan=2)
	    form.set_widget(ratingScale1, (0, 2), colspan=2)
	    form.set_widget(nextButton, (0, 4), colspan=2)
	    i= i+1
	    
	    form._exec()
	    
	    log.write_vars()
	__end__
	set _prepare ""

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 600
	set description "Waits for a specified duration"

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Based on your responses, <br />you are likely to perform 82% better than an average participant in the upcoming task.<br /><br />Press spacebar to continue." x=0 y=0 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script post_questions
	set description "Executes Python code"
	___run__
	i=0
	
	answers_post = "None"
	
	def my_form_validator():
	    return var.answers_post != "None"
	
	while i < 9:
	    form = Form(cols=[1,1], validator = my_form_validator, rows=[1,1,1,1,1])
	    title = Label(text=u'Indicate how much you agree with the following statement')
	    
	    ratingScale1 = RatingScale( var='answers_post', nodes=[u'Strongly Disagree \n\n 1', u'2',u'3', u'4',u'Strongly Agree \n\n 5'])
	
	    nextButton = Button(text=u'Next')
	
	    question1 = Label(text= post_textQ[i], center=False)
	    
	    var.questions_in_post = post_textQ[i]
	    
	    form.set_widget(title, (0, 0), colspan=2)
	    form.set_widget(question1, (0,1),colspan=2)
	    form.set_widget(ratingScale1, (0, 2), colspan=2)
	    form.set_widget(nextButton, (0, 4), colspan=2)
	    i= i+1
	    
	    form._exec()
	    log.write_vars()
	__end__
	___prepare__
	post_textQ = [
	    u"I am confident that I performed well on the BART task.",
	    u"I believe that overall I have above-average skills in making risk-related decisions.",
	    u"If I were to attempt the BART task again, I believe I would achieve a higher score.",
	    u"I felt confident in my decision to inflate the balloon during the task.",
	    u"I feel that I understood the task requirements thoroughly.",
	    u"I believe that the calculations provided, accurately understood my expertise.",
	    u"I believe my actual performance matched the feedback I received.",
	  # (to the control group)
	    u"I questioned the validity of the feedback given before the task.",
	    #u"Participating in this task has improved my ability to make better decisions under risk.",
	    u"I think the feedback influenced my level of confidence during the task."
	]
	
	Question_num = [u'post_Question_1',u'post_Question_2',u'post_Question_3', u'post_Question_4', u'post_Question_5', u'post_Question_6', u'post_Question_7', u'post_Question_8', u'post_Question_9', u'post_Question_10' ]
	__end__

define sketchpad result
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Based on your responses, you will perform 2x better than average people in the upcoming test." x=0 y=0 z_index=0

define inline_script rps_5
	set description "Executes Python code"
	___run__
	# Question 5
	form5 = Form(cols=[1,1], rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale5 = RatingScale(var="rps_q5", nodes=nodes_6_q)
	nextButton = Button(text=u'Next')
	pre_questions = Label(text=u" really dislike not knowing what is going to happen.", center=False)
	
	
	form5.set_widget(title, (0, 0), colspan=2)
	form5.set_widget(pre_questions, (0,1))
	form5.set_widget(ratingScale5, (0, 2), colspan=2)
	form5.set_widget(nextButton, (0, 4), colspan=2)
	form5._exec()
	__end__
	set _prepare ""

define inline_script rps_6
	set description "Executes Python code"
	___run__
	form6 = Form(cols=[1,1], rows=[1,1,1,1,1])
	
	title = Label(text=u'Indicate how much you agree with the following statement')
	ratingScale6 = RatingScale(var="rps_q6", nodes=nodes_6_q)
	nextButton = Button(text=u'Next')
	pre_questions = Label(text=u"I usually view risks as a challenge.", center=False)
	
	form6.set_widget(title, (0, 0), colspan=2)
	form6.set_widget(pre_questions, (0,1))
	form6.set_widget(ratingScale6, (0, 2), colspan=2)
	form6.set_widget(nextButton, (0, 4), colspan=2)
	form6._exec()
	__end__
	set _prepare ""

define sketchpad thank_you
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=True text="thank you for participating" x=0 y=-1 z_index=0

